PsychoPy2experiment version="1.83.04"
Settings
  Monitor = testMonitor
  color = $[.4,.4,.4]
  Experiment info = {u'participant': u'', u'Scr or Whi': u'Whi'}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Data filename = u'data_Arrows_VVA_Direction' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  expName = Arrows_VVA_Direction
  logging level = debug
  Screen = 1
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Routines
  Routine spatial_instructions
    TextComponent text_4
      wrapWidth = 1.5
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        This task is just like the previous one, except with spatial directions instead of colors. Your job is to determine whether the spatial direction that is currently on the screen is the SAME spatial direction as the one that you just saw or a DIFFERENT spatial direction.

        [Experimenter - Green for SAME, Red for DIFFERENT]
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'd','s'
      startVal [time (s)] = 0.0
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    CodeComponent code
      Begin Experiment:
        if expInfo['Scr or Whi'] == 'Scr':
            practice_images = "SCR"
            stimOrder = expInfo['participant'] + 'vva_within_scr_order.csv'
        elif expInfo['Scr or Whi'] == 'Whi':
            practice_images = "WHI"
            stimOrder = expInfo['participant'] + 'vva_within_whi_order.csv'
  Routine end
    TextComponent text
      color = black
      text = This portion of the experiment is over. Thank you.
      stopVal [duration (s)] = 3.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine spatial_practice_between_formats
    TextComponent text_2
      color = black
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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    CodeComponent code_2
      Begin Routine:
        practice_format_conditions = practice_formats.pop(0)
        practice_trials = 'practice_order_' + practice_images + '_' + practice_format_conditions + '.xlsx'
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'd','s'
      startVal [time (s)] = 0.0
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  Routine spatial_practice_instructions
    TextComponent text_6
      wrapWidth = 1.5
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'd','s'
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Begin Experiment:
        import random
      Begin Routine:
        practice_formats = ['image','schema','word']

        random.shuffle(practice_formats)

        practice_format_conditions = practice_formats.pop(0)
        practice_trials = 'practice_order_' + practice_images + '_' + practice_format_conditions + '.xlsx'

        if repeat_spatial_practice.thisN == 0:
            text_6.setText("Let's try a few for practice. You'll see spatial directions one at a time on the screen. They will be either LEFT or RIGHT or AHEAD. Tell the experimenter if the spatial direction on the screen is the SAME or DIFFERENT from the spatial direction that you just saw. For the first stimulus, just say 'GO.' Then when it says 'Same?' underneath, tell the experimenter whether you see the same direction or a different direction")
        elif repeat_spatial_practice.thisN == 1:
            text_6.setText("Ok, before we practice one more time - do you have any questions about the task?")
  Routine spatial_practice_3
    KeyboardComponent key_resp_14
      forceEndRoutine = True
      allowedKeys = 'a','f'
      startVal [time (s)] = 0.0
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    TextComponent text_12
      color = black
      pos = (0, -.6)
      startVal [time (s)] = 0
      letterHeight = 0.1
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    ImageComponent image_4
      units = height
      startVal [time (s)] = 0.0
      image [set every repeat] = $"Extra_Stimuli//" + Stimulus_Practice
      size = [.67,.67]
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    TextComponent text_same_practice_3
      color = black
      pos = (0, -.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_7
      Begin Routine:
        if trials_4.thisN % 2 == 1:
            text_same_practice_3.setText("SAME / DIFFERENT?")
        else:
            text_same_practice_3.setText("")
      End Routine:
        if trials_4.thisN == 7:
            trials_4.finished=True
            continueRoutine = False
  Routine spatial_practice_2
    KeyboardComponent key_resp_12
      forceEndRoutine = True
      allowedKeys = 'a','f'
      startVal [time (s)] = 0.0
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    TextComponent text_11
      color = black
      pos = (0, -.6)
      startVal [time (s)] = 0
      letterHeight = 0.1
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    ImageComponent image_3
      units = height
      startVal [time (s)] = 0.0
      image [set every repeat] = $"Extra_Stimuli//" + Stimulus_Practice
      size = [.67,.67]
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    TextComponent text_same_practice_2
      color = black
      pos = (0, -.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_5
      Begin Routine:
        if trials_3.thisN % 2 == 1:
            text_same_practice_2.setText("SAME / DIFFERENT?")
        else:
            text_same_practice_2.setText("")
      End Routine:
        if trials_3.thisN == 7:
            trials_3.finished=True
            continueRoutine = False
  Routine spatial_trials
    KeyboardComponent direction_response
      forceEndRoutine = True
      allowedKeys = 'a','f'
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      units = height
      startVal [time (s)] = 0.0
      image [set every repeat] = $"21_Stimuli//" + Stimulus
      size = [.67,.67]
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    CodeComponent code_3
      Begin Experiment:
        between_format_text = visual.TextStim(win, color='black',text="+",height=.5)
      Begin Routine:
        if trials_2.thisN % 2 == 1:
            text_same.setText("SAME / DIFFERENT?")
        else:
            text_same.setText("")

        if trials_3.thisN == 0:
            lastTriaDirection = thisTrial_3.direction
      End Routine:
        if trials_2 > 0 and (trials_2.thisN +1) % 20 == 0:
            between_format_text.draw()
            win.flip()
            event.clearEvents()
            event.waitKeys(keyList=['d'])

        if trials_2.thisN == 0:
            correct = 1
        elif lastTrialDirection == thisTrial_2.direction and direction_response.keys in ['a']:
            correct = 1
        elif lastTrialDirection != thisTrial_2.direction and direction_response.keys in ['f']:
            correct = 1
        else:
            correct = 0

        lastTrialDirection = thisTrial_2.direction

        if trials_2.thisN % 2 == 1:
            trials_2.addData('spatialdirection_correct',correct)
    TextComponent text_same
      color = black
      pos = (0, -.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine spatial_practice
    KeyboardComponent key_resp_11
      forceEndRoutine = True
      allowedKeys = 'a','f'
      startVal [time (s)] = 0.0
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    TextComponent text_9
      color = black
      pos = (0, -.6)
      startVal [time (s)] = 0
      letterHeight = 0.1
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    ImageComponent image
      units = height
      startVal [time (s)] = 0.0
      image [set every repeat] = $"Extra_Stimuli//" + Stimulus_Practice
      size = [.67,.67]
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    TextComponent text_same_practice
      color = black
      pos = (0, -.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_4
      Begin Routine:
        if trials.thisN % 2 == 1:
            text_same_practice.setText("SAME / DIFFERENT?")
        else:
            text_same_practice.setText("")
      End Routine:
        if trials.thisN == 7:
            trials.finished=True
            continueRoutine = False
  Routine spatial_instructions_3
    TextComponent text_10
      wrapWidth = 1
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Great! Now for the actual experiment. You have as long as you like - try to get as many correct as you can.
    KeyboardComponent key_resp_13
      forceEndRoutine = True
      allowedKeys = 'd','s'
      startVal [time (s)] = 0.0
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Flow
  Routine spatial_instructions
  LoopInitiator repeat_spatial_practice loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 2
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    Routine spatial_practice_instructions
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $"Extra_Stimuli//" + practice_trials
      loopType = random
      nReps = 1
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      Routine spatial_practice
    LoopTerminator trials
    Routine spatial_practice_between_formats
    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = $"Extra_Stimuli//" + practice_trials
      loopType = random
      nReps = 1
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      Routine spatial_practice_2
    LoopTerminator trials_3
    Routine spatial_practice_between_formats
    LoopInitiator trials_4 loopType="TrialHandler"
      conditionsFile = $"Extra_Stimuli//" + practice_trials
      loopType = random
      nReps = 1
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      Routine spatial_practice_3
    LoopTerminator trials_4
  LoopTerminator repeat_spatial_practice
  Routine spatial_instructions_3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = $"Sequences//"+ stimOrder
    loopType = sequential
    nReps = 1
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    Routine spatial_trials
  LoopTerminator trials_2
  Routine end
